PsychoPy2experiment version="2024.1.5"
Settings
  expName = angel_paradigm_builder
  Audio lib = ptb
  runMode = False
  Experiment info = {"participant":"test","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = (1280, 800)
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  Save csv file = True
  logging level = warning
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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  Routine Init
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        import angel_paradigm_coder as engine
        args = engine.parse_args()
        args = engine.show_config_dialog(args)
        engine.CURRENT_ARGS = args
      Begin Experiment:
        import random as std_random
        args = engine.CURRENT_ARGS
        levels = [level.strip() for level in args.levels.split(",") if level.strip()]
        engine.validate_config(args)

        # Populate KEYS so slides respond to keypresses
        engine.KEYS["left"] = engine.parse_keys_list(args.left_keys)
        engine.KEYS["right"] = engine.parse_keys_list(args.right_keys)
        engine.KEYS["continue"] = engine.parse_keys_list(getattr(args, "continue_keys", "any"))
        engine.KEYS["trigger"] = engine.parse_keys_list(args.trigger_keys)
        KEYS = engine.KEYS

        exp_clock = core.Clock()
        markers = engine.MarkerSender(args, core, exp_clock)
        rng = std_random.Random(args.seed)
      End Experiment:
        # Stop and delete all cached audio objects so Core Audio's HALC dispatch
        # queue can drain before Python exits (prevents SIGILL crash on macOS).
        try:
            for _snd in list(audio_cache.values()):
                _snd.stop()
            audio_cache.clear()
        except (NameError, Exception):
            pass
        import time as _time
        _time.sleep(0.5)  # Allow Core Audio listener thread to drain
        markers.close()
  Routine Welcome
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    TextComponent welcome_text
      startVal [time (s)] = 0.0
      units = height
      text = $'LEVEL - ' + str(args.levels) + '\n\nWelcome To this Level!\n\nPress any button to begin...'
      letterHeight = 0.06
      wrapWidth = 1.5
      height = 0.06
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    KeyboardComponent welcome_key
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      store = nothing
      registerOneshot = False
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  Routine Instructions
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    CodeComponent instruction_code
      Code Type = Py
      Begin Routine:
        if args.skip_instructions:
            continueRoutine = False
    ImageComponent instruction_image
      startVal [time (s)] = 0.0
      size = (1.333, 1.0)
      units = height
      image = $str(args.resource_root / engine.LEVEL_TEMPLATES[levels[0]] / args.language / 'InstructionLevel1.PNG')
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    KeyboardComponent instruction_key
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      store = nothing
      registerOneshot = False
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  Routine TriggerWait
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    CodeComponent trigger_code
      Code Type = Py
      Begin Routine:
        if not args.fmri_mode:
            continueRoutine = False
      End Routine:
        args.trigger_onset_global = exp_clock.getTime()
    TextComponent trigger_text
      startVal [time (s)] = 0.0
      units = height
      text = Waiting for fMRI trigger signal (press 's')...
      letterHeight = 0.05
      wrapWidth = 1.5
      height = 0.05
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    KeyboardComponent trigger_key
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 's', 'space'
      store = nothing
      registerOneshot = False
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  Routine TrialRoutine
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    CodeComponent trial_runner
      Code Type = Py
      Begin Experiment:
        trial_counter = 0
        trials = []
      Begin Routine:
        # Prepare trial stimuli mapping and assets once
        if 'assets' not in locals():
            assets_by_level = {lvl: engine.load_assets(args.resource_root / engine.LEVEL_TEMPLATES[lvl], args.language) for lvl in levels}
            assets = assets_by_level[levels[0]]
            stimuli = engine.make_stimuli(win, visual, assets)
            audio_cache = engine.make_audio_cache(sound, assets)

            # Adapter so run_practice_phase can call writer.writerow() safely
            class _PsyWriter:
                def writerow(self, row):
                    for k, v in row.items():
                        thisExp.addData(k, v)
                    thisExp.nextEntry()
            class _PsyFile:
                def flush(self): pass

            # 1. Run Practice Phase
            trial_counter = engine.run_practice_phase(
                levels, args, win, core, event, visual, sound,
                _PsyWriter(), _PsyFile(), rng, 0, exp_clock, markers
            )

            # 2. Main Blocks Loop (mirrors run_main_level exactly)
            active_trials, baseline_trials = engine.parse_trials_per_block(args.trials_per_block)
            block_trial_count = active_trials + baseline_trials
            total_main_trials = args.blocks * block_trial_count

            for level in levels:
                assets = assets_by_level[level]
                stimuli = engine.make_stimuli(win, visual, assets)
                audio_cache = engine.make_audio_cache(sound, assets)

                if not args.skip_instructions:
                    engine.show_welcome_slide(win, event, visual, level)
                    engine.show_level_instruction(win, event, visual, sound, assets, level, "main")
                    engine.show_image_slide(win, event, visual, sound, assets["language"] / "Ready.PNG", assets["language"] / "Ready.mp3")

                block_rows = []
                ready_pending = False

                for trial in engine.generate_level_trials(
                    level, args.blocks, rng, args.category_set,
                    args.paired_tone_offset_mode, args.paired_tone_offset_min,
                    args.paired_tone_offset_max, args.cd_schedule,
                    active_trials, baseline_trials, args.level2_cd
                ):
                    if trial.trial_in_block == 1:
                        markers.send("block_start")
                        if ready_pending:
                            engine.show_image_slide(win, event, visual, sound, assets["language"] / "Ready.PNG", assets["language"] / "Ready.mp3")
                            ready_pending = False

                    trial_counter += 1
                    block_name = f"level{level}_block{trial.block:02d}"
                    row = engine.run_trial(
                        trial, args, win, core, event, visual, sound, stimuli,
                        assets, audio_cache, rng, trial_counter, exp_clock, markers, block_name
                    )
                    row["phase"] = "main"
                    block_rows.append(row)
                    for k, v in row.items():
                        thisExp.addData(k, v)
                    thisExp.nextEntry()

                    # Feedback only after every 2nd block (matches coder: trial.block % getattr(args, "feedback_frequency", 2) == 0)
                    if trial.trial_in_block == block_trial_count and trial.block % getattr(args, "feedback_frequency", 2) == 0:
                        if args.show_feedback:
                            engine.show_feedback(
                                win, event, visual, sound, assets["language"],
                                block_rows[-2 * block_trial_count:],
                                len(block_rows), total_main_trials
                            )
                        ready_pending = True

                    # Level 2: reversal slide at halfway point
                    if level == "2" and trial.block == args.blocks // 2 and trial.trial_in_block == block_trial_count:
                        reversal = visual.TextStim(win,
                            text="Rule change\n\nMeaningful: RIGHT\nAmbiguous: LEFT\n\nPress space to continue",
                            color="white", height=0.04, units="height")
                        reversal.draw()
                        win.flip()
                        engine.wait_for_continue(event)
                        ready_pending = True

                # Session summary at end of level
                if args.show_feedback:
                    engine.show_session_summary(win, event, visual, sound, assets["language"], block_rows, label=f"Level {level} Session")

                if not args.skip_instructions:
                    engine.show_image_slide(win, event, visual, sound, assets["language"] / "ExperimentEnd.PNG", assets["language"] / "ExperimentEnd.mp3")
  Routine Feedback
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    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        if not args.show_feedback:
            continueRoutine = False
    TextComponent feedback_text
      startVal [time (s)] = 0.0
      units = height
      text = Block Complete!\n\nPress any key to continue...
      letterHeight = 0.05
      wrapWidth = 1.5
      height = 0.05
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    KeyboardComponent feedback_key
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      store = nothing
      registerOneshot = False
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  Routine End
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    ImageComponent end_image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      size = (1.333, 1.0)
      units = height
      image = $str(args.resource_root / engine.LEVEL_TEMPLATES[levels[0]] / args.language / 'ExperimentEnd.PNG')
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Flow
  Routine Init
  Routine Welcome
  Routine Instructions
  Routine TriggerWait
  Routine TrialRoutine
  Routine End
